// -----------------------------------------------------------------------------
// Script Fiji/ImageJ - Analyse de l’intensité en fonction de la distance à la périphérie nucléaire
//
// Ce script permet de calculer, pour chaque noyau, l’intensité moyenne du signal
// en fonction de la distance à la périphérie nucléaire.
// Il utilise un Distance Map généré depuis le masque du noyau pour extraire
// les valeurs de fluorescence à différentes distances.
//
// Résultat : un fichier CSV contenant, pour chaque noyau et chaque distance (en px),
// la moyenne d’intensité du canal tracer (C2).
//
// Auteur : Tom Lanchec
// -----------------------------------------------------------------------------

originalTitle = getTitle();
run("Split Channels");

C1 = "C1-" + originalTitle; // Canal DAPI
C2 = "C2-" + originalTitle; // Canal tracer

working_dir = getDirectory("Choisissez le dossier de sauvegarde des résultats");
experiment_dir = working_dir + "distance_analysis_results";
if (!File.exists(experiment_dir)) {
    File.makeDirectory(experiment_dir);
}

results = "Nucleus,Distance,MeanIntensity\n";

selectWindow(C1);
run("Duplicate...", "title=nuclei");
run("Gaussian Blur...", "sigma=2");
run("Enhance Contrast...", "saturated=0 normalize");
setOption("BlackBackground", false);
run("Make Binary", "method=Li");
run("Fill Holes");

selectWindow("nuclei");
run("Duplicate...", "title=periphery");
run("Outline");
run("Dilate");
run("Dilate");

selectWindow("periphery");
run("Distance Map");
rename("DistanceMap");

selectWindow("nuclei");
run("Analyze Particles...", "size=2000-Infinity show=Outlines display clear add");
roiCount = roiManager("count");

for (i=0; i<roiCount; i++){
    roiManager("Select", i);

    getSelectionBounds(x, y, width, height);

    selectWindow(C2);
    run("Duplicate...", "title=tracer_nucleus" + (i+1));
    makeRectangle(x, y, width, height);
    run("Crop");
    rename("tracer_nucleus" + (i+1));

    selectWindow("DistanceMap");
    run("Duplicate...", "title=distance_nucleus" + (i+1));
    makeRectangle(x, y, width, height);
    run("Crop");
    rename("distance_nucleus" + (i+1));

    selectWindow("tracer_nucleus" + (i+1));
    saveAs("Tiff", experiment_dir + "/" + originalTitle + "_" + (i+1) + "_tracer.tif");

    selectWindow("distance_nucleus" + (i+1));
    saveAs("Tiff", experiment_dir + "/" + originalTitle + "_" + (i+1) + "_distance.tif");

    selectWindow("distance_nucleus" + (i+1));
    getStatistics(area, mean, min, max);
    for(dist=0; dist<=max; dist++){
        selectWindow("distance_nucleus" + (i+1));
        setThreshold(dist, dist);
        run("Create Selection");

        selectWindow("tracer_nucleus" + (i+1));
        run("Measure");
        meanIntensity = getResult("Mean", nResults-1);
        results += (i+1) + "," + dist + "," + meanIntensity + "\n";
    }
    run("Clear Results");

    close("tracer_nucleus" + (i+1));
    close("distance_nucleus" + (i+1));
}

File.saveString(results, experiment_dir + "/" + originalTitle + "_distance_intensity.csv");

run("Close All");
run("Collect Garbage");
showMessage("Analyse terminée.");
